load_file("nrngui.hoc")
// PI=3.141592
FARADAY=96485

celsius=30
v_init = -65.0
Dt = 1e-2
tstop = 350 // ms 

load_file("testutils.hoc")

objref testcomp, cadvec, cafile

testcomp = new singlecomp()

testcomp.setup_channel("cal", 1e-9)
testcomp.soma {
    insert cad
    beta_cad  =   0.02
    phi_cad = 52000.0
    ceiling_cad = 1e6
}

testcomp.setup_recording("cal", Dt)

cadvec = new Vector()
cadvec.record(&testcomp.soma.cai(0.5), Dt)
// (50 ms start positive current, 150 ms stop positive current, 200
// ms start negative current, 300 ms stop negative current 350 ms stop
// simulation)

run()
testcomp.save_data("CaPool", Dt)
cafile = new File()
cafile.wopen("data/CaPool_Ca.dat")
for ii =0, cadvec.size() - 1 {
    cafile.printf("%g %g\n", ii * Dt * 1e-3, cadvec.x[ii])
}
cafile.close()
quit()
